#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLML_STARLib.hsl"
#include "Device Sub-method Libraries\\Hamilton Tilt Clamp Module\\Hamilton Tilt Clamp Module.hsl"
#include "WSI\\Hamilton Tilt Clamp Module\\Hamilton Tilt Clamp Module_WSI.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace ACC_PROCESSES {
  variable arrHHSDevices[];
  sequence seqCOREGripper;
  sequence seqTips_5mL;
  variable arrTiltModules[];
  sequence seqRes_Media;
  sequence seqRes_TrypLE;
  sequence seqRes_PBS;
  sequence seqRes_Waste;
  variable blnSimulationMode;
  function Abstract(  ) void ;
  function HHS_Heat( variable intTemp ) void ;
  function HHS_Lock( variable blnGripState ) void ;
  function HHS_Shake( variable intSpeed ) void ;
  function PIP_5mL_ResToFlask( device & ML_STAR, sequence & seqDestination, variable intVolume, variable intLiquidType ) void ;
  function PIP_5mL_TiltToFalcon( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable intVolume, variable intLiquidType ) void ;
  function PIP_5mL_TiltToWaste( device & ML_STAR, sequence & seqSource, variable intVolume, variable intLiquidType ) void ;
  function SYSTEM_Abort( device & ML_STAR ) void ;
  function SYSTEM_Close( device & ML_STAR ) void ;
  function SYSTEM_Init( device & ML_STAR, sequence seqCORE, sequence seq_5mLTipSequence, sequence seq_PBS, sequence seq_Media, sequence seq_TrypLE, sequence seq_Waste, variable blnSim ) void ;
  function TILT_Angle( variable intTiltAngle ) void ;
  function TILT_Lock( variable blnGripState ) void ;
  function TILT_Sway( variable intSpeed, variable intEndAngle, variable intTime ) void ;
  function TMR_Start( timer & strTimer, variable intTime ) void ;
  function TMR_WaitFor( timer & strTimer, variable & rtnTimerStopped ) void ;
  function TRP_OneWell_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Abstract(  ) void {
  }

  function HHS_Heat( variable intTemp ) void {
    private variable loopCounter1;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("HHS_Heat"));
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(""), arrHHSDevices);
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intTemp != 0)
        {
          HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1), intTemp, 0);
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started heating HHS_"), loopCounter1, Translate(" to "), intTemp, Translate("C"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Stopped heating HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
  }

  function HHS_Shake( variable intSpeed ) void {
    private variable loopCounter1;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("HHS_Shake"));
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intSpeed != 0)
        {
          HSLHamHeaterShaker::StartShaker(loopCounter1, intSpeed);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> arrHHSDevices: "), arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("-- Started shaking devHHS_"), loopCounter1, Translate(" at "), intSpeed, Translate("rpm"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopShaker(loopCounter1);
          TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Stopped shaking HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
    if (blnSimulationMode == 1)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SIM] Simulating HHS shake at: "), intSpeed, Translate(" RPM"), Translate(""));
    }
  }

  function TILT_Angle( variable intTiltAngle ) void {
    private variable rtnTilt;
    private variable intModuleCount;
    private variable intSpeed;
    private variable swayLoop;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("TILT_Angle"));
    intModuleCount=arrTiltModules.GetSize();
    intSpeed = 5;
    TILT_Lock(0);
    {
      for(swayLoop = 0; swayLoop < intModuleCount;)
      {
        swayLoop = swayLoop + 1;
        if (blnSimulationMode == 0)
        {
          rtnTilt = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltModules.ElementAt( swayLoop -1), intSpeed, intTiltAngle);
          if (rtnTilt == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error tilting the module = "), arrTiltModules.ElementAt( swayLoop -1));
          }
        }
        else
        {
          Trace(">> [SIM] Hamilton Tilt Clamp Module ", arrTiltModules[swayLoop-1], ": Open;");
        }
      }
    }
  }

  function TRP_OneWell_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void {
    private variable intGripWidth;
    private variable intGripWidthOpen;
    private variable intGripHeight;
    private variable loopCounter1;
    private variable intNumberOfTransports;
    private variable intEjectTool;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("TRP_OneWell_CORE"));
    intEjectTool = 0;
    intGripWidth = 80;
    intGripHeight = 8.5;
    intGripWidthOpen = 87;
    intNumberOfTransports = SeqGetTotal(seqSource);
    TILT_Lock(1);
    HHS_Lock(1);
    {
      loopCounter1 = 0;
      while (
         (seqSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqSource, 1);
        loopCounter1 = loopCounter1 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Transport loop: "), loopCounter1, Translate("/"), intNumberOfTransports);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        if (loopCounter1 == intNumberOfTransports)
        {
          intEjectTool = 1;
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (
           (seqSource.GetCurrentPosition() > 0 && seqSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqSource.SetMax(seqSource.GetTotal());
      seqSource.SetCurrentPosition(1);
    }
    TILT_Lock(0);
    HHS_Lock(0);
  }

  function SYSTEM_Init( device & ML_STAR, sequence seqCORE, sequence seq_5mLTipSequence, sequence seq_PBS, sequence seq_Media, sequence seq_TrypLE, sequence seq_Waste, variable blnSim ) void {
    private variable strHHSDevice;
    private variable loopCounter1;
    private variable strModuleName;
    private variable strTiltModule;
    private variable loopCounter2;
    private variable intTiltComport;
    private variable rtnTilt;
    private variable intTiltModuleCount;
    private variable rtnHHS;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("SYSTEM_Init"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    blnSimulationMode = blnSim;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate("="));
    arrHHSDevices.SetSize(0);
    HSLHamHeaterShaker::SetSimulation(blnSimulationMode);
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        strHHSDevice = StrConcat2(Translate("devHHS_"), loopCounter1);
        rtnHHS = HSLHamHeaterShaker::CreateUsbDevice(loopCounter1, strHHSDevice);
        arrHHSDevices.AddAsLast(strHHSDevice);
        if (rtnHHS != 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error initialising HHS module = "), arrHHSDevices.ElementAt( loopCounter1 -1));
        }
        HSLHamHeaterShaker::StopAllShaker();
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Array of HHS modules, arrHHSDevices = "), arrHHSDevices);
    intTiltComport = 0;
    intTiltModuleCount = 2;
    arrTiltModules.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < intTiltModuleCount;)
      {
        loopCounter2 = loopCounter2 + 1;
        strTiltModule = StrConcat2(Translate("devTilt_"), loopCounter2);
        arrTiltModules.AddAsLast(strTiltModule);
        strModuleName = StrConcat2(Translate("C"), loopCounter2);
        rtnTilt = Hamilton_Tilt_Clamp_Module::Initialize(intTiltComport, strModuleName, blnSimulationMode, 0, arrTiltModules.ElementAt( loopCounter2 -1));
        if (rtnTilt == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error initialising tilt module = "), arrTiltModules.ElementAt( loopCounter2 -1));
        }
        rtnTilt = Hamilton_Tilt_Clamp_Module::SetTraceLevel(arrTiltModules.ElementAt( loopCounter2 -1), TRACE_LEVEL_RELEASE);
        if (rtnTilt == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error setting trace level with = "), arrTiltModules.ElementAt( loopCounter2 -1));
        }
        if (blnSimulationMode == 0)
        {
          rtnTilt = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltModules.ElementAt( loopCounter2 -1), 10, 0);
          if (rtnTilt == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error resetting tilt module = "), arrTiltModules.ElementAt( loopCounter2 -1));
          }
        }
      }
    }
    TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Array of tilt modules, arrTiltModules = "), arrTiltModules);
    SeqRemoveAll(seqCOREGripper);
    SeqCopySequence(seqCOREGripper, seqCORE);
    SeqRemoveAll(seqTips_5mL);
    SeqCopySequence(seqTips_5mL, seq_5mLTipSequence);
    SeqRemoveAll(seqRes_PBS);
    SeqCopySequence(seqRes_PBS, seq_PBS);
    SeqRemoveAll(seqRes_Media);
    SeqCopySequence(seqRes_Media, seq_Media);
    SeqRemoveAll(seqRes_TrypLE);
    SeqCopySequence(seqRes_TrypLE, seq_TrypLE);
    SeqRemoveAll(seqRes_Waste);
    SeqCopySequence(seqRes_Waste, seq_Waste);
  }

  function TMR_Start( timer & strTimer, variable intTime ) void {
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("TMR_Start"));
    if (blnSimulationMode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Instrument in simulation. Shortening timer."), Translate(""));
      intTime = 3;
    }
    if( 0 == strTimer.SetTimer(intTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started new timer for: "), intTime, Translate(" seconds"), Translate(""));
  }

  function TMR_WaitFor( timer & strTimer, variable & rtnTimerStopped ) void {
    rtnTimerStopped = 0;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("TMR_WaitFor"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for timer to complete..."), Translate(""));
    rtnTimerStopped = strTimer.WaitTimer(hslTrue, hslTrue);
    if (0 == rtnTimerStopped)
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Timer complete."), Translate(""));
  }

  function TILT_Sway( variable intSpeed, variable intEndAngle, variable intTime ) void {
    private variable loopCounter1;
    private variable rtnTilt;
    private variable loopCounter2;
    private timer tmrTilt;
    private variable intElapsedTime;
    private variable intModuleCount;
    private variable swayLoop;
    private variable intStartAngle;
    private timer tmrDelay;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("TILT_Sway"));
    intModuleCount=arrTiltModules.GetSize();
    intStartAngle = 0;
    if( 0 == tmrTilt.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      for(loopCounter1 = 0; loopCounter1 < intModuleCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (blnSimulationMode == 0)
        {
          rtnTilt = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltModules.ElementAt( loopCounter1 -1));
          if (rtnTilt == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error initialising tilt module = "), arrTiltModules.ElementAt( loopCounter1 -1));
          }
        }
        else
        {
          Trace(">> [SIM] Hamilton Tilt Clamp Module ", arrTiltModules[loopCounter1-1], ": Close;");
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      {
        loopCounter2 = 0;
        while (1 == 1)
        {
          loopCounter2 = loopCounter2 + 1;
          {
            for(swayLoop = 0; swayLoop < intModuleCount;)
            {
              swayLoop = swayLoop + 1;
              rtnTilt = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltModules.ElementAt( swayLoop -1), intSpeed, intEndAngle);
              if (rtnTilt == 0)
              {
                TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error tilting the module = "), arrTiltModules.ElementAt( swayLoop -1));
              }
            }
          }
          {
            for(swayLoop = 0; swayLoop < intModuleCount;)
            {
              swayLoop = swayLoop + 1;
              rtnTilt = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltModules.ElementAt( swayLoop -1), intSpeed, intStartAngle);
              if (rtnTilt == 0)
              {
                TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error tilting the module = "), arrTiltModules.ElementAt( swayLoop -1));
              }
            }
          }
          if( 0 == tmrDelay.SetTimer(1) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == tmrDelay.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          intElapsedTime = tmrTilt.GetElapsedTime();
          if (intElapsedTime >= intTime)
          {
            break;
          }
        }
      }
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> [SIM] Simulating tilt module sway "), Translate(""));
    }
  }

  function PIP_5mL_TiltToFalcon( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable intVolume, variable intLiquidType ) void {
    private variable intLoopNumber;
    private variable intTransferVolume;
    private variable fltLoopNumber;
    private variable intDispenseHeight;
    private variable intAspirateRetract;
    private variable strChannelPattern;
    private variable loopCounter1;
    private variable intDispenseRetract;
    private variable loopCounter2;
    private variable fltTransferVolume;
    private variable loopCounter3;
    private variable intNumberOfChannels;
    private variable intAspirateHeight;
    private variable strLiquidClass;
    private variable intChannelPerTransfer;
    private variable intPipettingLoop;
    private variable fltPipettingLoop;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("PIP_5mL_TiltToFalcon"));
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    intChannelPerTransfer = 2;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" >> Total volume transfer = "), intVolume);
    fltLoopNumber = intVolume / (8000 * 1.0);
    intLoopNumber = MthCeiling(fltLoopNumber);
    fltTransferVolume = intVolume / (intLoopNumber * 1.0);
    fltTransferVolume = fltTransferVolume / (intChannelPerTransfer * 1.0);
    intTransferVolume = MthCeiling(fltTransferVolume);
    strChannelPattern = Translate("");
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
      {
        loopCounter3 = loopCounter3 + 1;
        strChannelPattern = strChannelPattern + Translate("1");
      }
    }
    strChannelPattern = strChannelPattern + Translate("0000000");
    if (intLiquidType == 0)
    {
      strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" >> Liquid being transferred: CELLS IN MEDIA"), Translate(""));
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Error: invalid liquid type selected"), Translate(">>>>> Method aborted."));
      abort;
    }
    intAspirateRetract = 18;
    intAspirateHeight = 1.8;
    intDispenseRetract = 18;
    intDispenseHeight = 5;
    TILT_Angle(10);
    fltPipettingLoop = SeqGetTotal(seqSource);
    fltPipettingLoop = fltPipettingLoop / (intChannelPerTransfer * 1.0);
    intPipettingLoop = MthCeiling(fltPipettingLoop);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Number of pipetting loops: "), intPipettingLoop);
    {
      for(loopCounter2 = 0; loopCounter2 < intPipettingLoop;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
        {
          for(loopCounter1 = 0; loopCounter1 < intLoopNumber;)
          {
            loopCounter1 = loopCounter1 + 1;
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Pipetting Loop: "), loopCounter1, Translate("/"), intLoopNumber);
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
            intDispenseHeight = intDispenseHeight + 10.8;
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Dispense height (mm): "), intDispenseHeight);
          }
        }
        SeqIncrement(seqSource, intNumberOfChannels);
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        SeqIncrement(seqTips_5mL, intNumberOfChannels);
        if(0){
          ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        }
      }
    }
    SeqResetSequenceIndexes(seqSource);
  }

  function PIP_5mL_TiltToWaste( device & ML_STAR, sequence & seqSource, variable intVolume, variable intLiquidType ) void {
    private variable intLoopNumber;
    private variable intTransferVolume;
    private variable fltLoopNumber;
    private variable intDispenseHeight;
    private variable intAspirateRetract;
    private variable strChannelPattern;
    private variable loopCounter1;
    private variable intDispenseRetract;
    private variable loopCounter2;
    private variable fltTransferVolume;
    private variable loopCounter3;
    private variable intNumberOfChannels;
    private variable intAspirateHeight;
    private variable strLiquidClass;
    private variable intChannelPerTransfer;
    private variable intPipettingLoop;
    private variable fltPipettingLoop;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("PIP_5mL_TiltToWaste"));
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    intChannelPerTransfer = 2;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" >> Total volume transfer = "), intVolume);
    fltLoopNumber = intVolume / (8000 * 1.0);
    intLoopNumber = MthCeiling(fltLoopNumber);
    fltTransferVolume = intVolume / (intLoopNumber * 1.0);
    fltTransferVolume = fltTransferVolume / (intChannelPerTransfer * 1.0);
    intTransferVolume = MthCeiling(fltTransferVolume);
    strChannelPattern = Translate("");
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
      {
        loopCounter3 = loopCounter3 + 1;
        strChannelPattern = strChannelPattern + Translate("1");
      }
    }
    strChannelPattern = strChannelPattern + Translate("0000000");
    if (intLiquidType == 0)
    {
      strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" >> Liquid being transferred: MEDIA"), Translate(""));
    }
    else
    {
      if (intLiquidType == 1)
      {
        strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" >> Liquid being transferred: PBS"), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Error: invalid liquid type selected"), Translate(">>>>> Method aborted."));
        abort;
      }
    }
    intAspirateRetract = 18;
    intAspirateHeight = 1.8;
    intDispenseRetract = 18;
    intDispenseHeight = 32;
    TILT_Angle(10);
    fltPipettingLoop = SeqGetTotal(seqSource);
    fltPipettingLoop = fltPipettingLoop / (intChannelPerTransfer * 1.0);
    intPipettingLoop = MthCeiling(fltPipettingLoop);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Number of pipetting loops: "), intPipettingLoop);
    {
      for(loopCounter2 = 0; loopCounter2 < intPipettingLoop;)
      {
        loopCounter2 = loopCounter2 + 1;
        if(0){
        }
        ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
        {
          for(loopCounter1 = 0; loopCounter1 < intLoopNumber;)
          {
            loopCounter1 = loopCounter1 + 1;
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Pipetting Loop: "), loopCounter1, Translate("/"), intLoopNumber);
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
          }
        }
        SeqIncrement(seqSource, intNumberOfChannels);
        if(0){
          ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
          SeqIncrement(seqTips_5mL, intNumberOfChannels);
        }
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
      }
    }
    SeqResetSequenceIndexes(seqSource);
  }

  function PIP_5mL_ResToFlask( device & ML_STAR, sequence & seqDestination, variable intVolume, variable intLiquidType ) void {
    private variable intLoopNumber;
    private variable intTransferVolume;
    private variable fltLoopNumber;
    private variable intDispenseHeight;
    private variable intAspirateRetract;
    private variable strChannelPattern;
    private variable loopCounter1;
    private variable intDispenseRetract;
    private variable loopCounter2;
    private variable fltTransferVolume;
    private variable loopCounter3;
    private variable intNumberOfChannels;
    private variable intAspirateHeight;
    private variable strLiquidClass;
    private variable intChannelPerTransfer;
    private variable intPipettingLoop;
    private variable fltPipettingLoop;
    private sequence seqSource;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("PIP_5mL_ResToHHS"));
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    intChannelPerTransfer = 2;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" >> Total volume transfer = "), intVolume);
    fltLoopNumber = intVolume / (8000 * 1.0);
    intLoopNumber = MthCeiling(fltLoopNumber);
    fltTransferVolume = intVolume / (intLoopNumber * 1.0);
    fltTransferVolume = fltTransferVolume / (intChannelPerTransfer * 1.0);
    intTransferVolume = MthCeiling(fltTransferVolume);
    strChannelPattern = Translate("");
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
      {
        loopCounter3 = loopCounter3 + 1;
        strChannelPattern = strChannelPattern + Translate("1");
      }
    }
    strChannelPattern = strChannelPattern + Translate("0000000");
    if (intLiquidType == 0)
    {
      strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentRes");
      SeqCopySequence(seqSource, seqRes_Media);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" >> Liquid being transferred: MEDIA"), Translate(""));
    }
    else
    {
      if (intLiquidType == 1)
      {
        strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentRes");
        SeqCopySequence(seqSource, seqRes_PBS);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" >> Liquid being transferred: PBS"), Translate(""));
      }
      else
      {
        if (intLiquidType == 2)
        {
          strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentRes");
          SeqCopySequence(seqSource, seqRes_TrypLE);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(" >> Liquid being transferred: TRYPLE"), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Error: invalid liquid type selected"), Translate(">>>>> Method aborted."));
          abort;
        }
      }
    }
    intAspirateRetract = 18;
    intAspirateHeight = 2;
    intDispenseRetract = 18;
    intDispenseHeight = 5;
    TILT_Angle(0);
    fltPipettingLoop = SeqGetTotal(seqDestination);
    fltPipettingLoop = fltPipettingLoop / (intChannelPerTransfer * 1.0);
    intPipettingLoop = MthCeiling(fltPipettingLoop);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Number of pipetting loops: "), intPipettingLoop);
    {
      for(loopCounter2 = 0; loopCounter2 < intPipettingLoop;)
      {
        loopCounter2 = loopCounter2 + 1;
        if(0){
        }
        if (loopCounter2 == 1)
        {
          ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
        }
        {
          for(loopCounter1 = 0; loopCounter1 < intLoopNumber;)
          {
            loopCounter1 = loopCounter1 + 1;
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Pipetting Loop: "), loopCounter1, Translate("/"), intLoopNumber);
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
          }
        }
        SeqIncrement(seqDestination, intNumberOfChannels);
        if(0){
          if (loopCounter2 == intPipettingLoop)
          {
            ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
            SeqIncrement(seqTips_5mL, intNumberOfChannels);
          }
        }
        if (loopCounter2 == intPipettingLoop)
        {
          ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        }
      }
    }
    SeqResetSequenceIndexes(seqDestination);
  }

  function TILT_Lock( variable blnGripState ) void {
    private variable rtnTilt;
    private variable intModuleCount;
    private variable loopCounter1;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Opening tilt modules..."), Translate(""));
    intModuleCount=arrTiltModules.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < intModuleCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (blnGripState == 1)
        {
          if (blnSimulationMode == 0)
          {
            rtnTilt = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltModules.ElementAt( loopCounter1 -1), 5, 0);
            if (rtnTilt == 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error tilting tilt module = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
            rtnTilt = Hamilton_Tilt_Clamp_Module::ClampOpen(arrTiltModules.ElementAt( loopCounter1 -1));
            if (rtnTilt == 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error opening tilt module = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
          }
          else
          {
            Trace(">> [SIM] Hamilton Tilt Clamp Module ", arrTiltModules[loopCounter1-1], ": Open;");
          }
        }
        else
        {
          if (blnSimulationMode == 0)
          {
            rtnTilt = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltModules.ElementAt( loopCounter1 -1));
            if (rtnTilt == 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error closing tilt module = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
          }
          else
          {
            Trace(">> [SIM] Hamilton Tilt Clamp Module ", arrTiltModules[loopCounter1-1], ": Close;");
          }
        }
      }
    }
  }

  function SYSTEM_Close( device & ML_STAR ) void {
    private dialog customDialog_1;
    private variable rtn;
    private variable intTiltModuleArraySize;
    private variable loopCounter1;
    private variable rtnTilt;
    private variable loopCounter2;
    private variable intHHSModuleArraySize;
    private variable rtnHHS;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("SYSTEM_Close"));
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    rtn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    if (rtn == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> User ended the method"), Translate(""));
    }
    MECC::TraceComment(Translate("############## Method Complete Successfully #################"));
    intTiltModuleArraySize=arrTiltModules.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < intTiltModuleArraySize;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (blnSimulationMode == 0)
        {
          rtnTilt = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltModules.ElementAt( loopCounter1 -1), 1, 0);
          if (rtnTilt == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error tilting the module = "), arrTiltModules.ElementAt( loopCounter1 -1));
          }
          rtnTilt = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltModules.ElementAt( loopCounter1 -1));
          if (rtnTilt == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error closing tilt module = "), arrTiltModules.ElementAt( loopCounter1 -1));
          }
          rtnTilt = Hamilton_Tilt_Clamp_Module::Terminate(arrTiltModules.ElementAt( loopCounter1 -1));
          if (rtnTilt == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error terminating the tilt module = "), arrTiltModules.ElementAt( loopCounter1 -1));
          }
        }
        else
        {
          Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltModules[loopCounter1-1], ": Tilt to 0°;");
          Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltModules[loopCounter1-1], ": ClampClose;");
          Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltModules[loopCounter1-1], ": Terminate;");
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from Tilt Modules"), Translate(""));
    intHHSModuleArraySize=arrHHSDevices.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < intHHSModuleArraySize;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (blnSimulationMode == 0)
        {
          rtnHHS = HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error resetting HHS temperature for device = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error stopping HHS shaking for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error releasing HHS grippers for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
        }
        else
        {
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopTempCtrl;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopShaker;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": SetPlateLock;");
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      HSLHamHeaterShaker::Terminate();
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from HHS Modules"), Translate(""));
  }

  function SYSTEM_Abort( device & ML_STAR ) void {
    private dialog customDialog_2;
    private variable rtnTilt;
    private variable rtn;
    private variable intTiltModuleArraySize;
    private variable intHHSModuleArraySize;
    private variable rtnHHS;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable loopCounter3;
    private dialog dialogHandle_3;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("SYSTEM_Abort"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    rtn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if (rtn == 2)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> Method aborted"), Translate(""));
    }
    MECC::TraceComment(Translate("############## Method Aborted #################"));
    intTiltModuleArraySize=arrTiltModules.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < intTiltModuleArraySize;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (blnSimulationMode == 0)
        {
          rtnTilt = Hamilton_Tilt_Clamp_Module::Tilt(arrTiltModules.ElementAt( loopCounter1 -1), 5, 0);
          if (rtnTilt == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error tilting the module = "), arrTiltModules.ElementAt( loopCounter1 -1));
          }
          rtnTilt = Hamilton_Tilt_Clamp_Module::ClampOpen(arrTiltModules.ElementAt( loopCounter1 -1));
          if (rtnTilt == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error closing tilt module = "), arrTiltModules.ElementAt( loopCounter1 -1));
          }
        }
      }
    }
    {
      for(loopCounter3 = 0; loopCounter3 < intTiltModuleArraySize;)
      {
        loopCounter3 = loopCounter3 + 1;
        if (blnSimulationMode == 0)
        {
          if (loopCounter3 == 1)
          {
            dialogHandle_3.SetOutput(Translate("If present, remove plate(s) from the open tilt module(s)."));
            dialogHandle_3.ShowOutput(Translate("Remove plate(s)"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
          rtnTilt = Hamilton_Tilt_Clamp_Module::ClampClose(arrTiltModules.ElementAt( loopCounter3 -1));
          if (rtnTilt == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error closing tilt module = "), arrTiltModules.ElementAt( loopCounter1 -1));
          }
          rtnTilt = Hamilton_Tilt_Clamp_Module::Terminate(arrTiltModules.ElementAt( loopCounter3 -1));
          if (rtnTilt == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error terminating the tilt module = "), arrTiltModules.ElementAt( loopCounter1 -1));
          }
        }
        else
        {
          Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltModules[loopCounter3-1], ": Tilt to 0°;");
          Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltModules[loopCounter3-1], ": ClampClose;");
          Trace("[SIM] Hamilton Tilt Clamp Module ", arrTiltModules[loopCounter3-1], ": Terminate;");
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from Tilt Modules"), Translate(""));
    intHHSModuleArraySize=arrHHSDevices.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < intHHSModuleArraySize;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (blnSimulationMode == 0)
        {
          rtnHHS = HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error resetting HHS temperature for device = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error stopping HHS shaking for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
          rtnHHS = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          if (rtnHHS == 0)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error releasing HHS grippers for device ID = "), arrHHSDevices.ElementAt( loopCounter2 -1));
          }
        }
        else
        {
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopTempCtrl;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": StopShaker;");
          Trace("[SIM] Hamilton Heater Shaker ", arrHHSDevices[loopCounter2-1], ": SetPlateLock;");
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      HSLHamHeaterShaker::Terminate();
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Disconnected from HHS Modules"), Translate(""));
  }

  function HHS_Lock( variable blnGripState ) void {
    private variable intModuleCount;
    private variable loopCounter1;
    private variable rtn;
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Locking HHS..."), Translate(""));
    intModuleCount=arrHHSDevices.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < intModuleCount;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (blnGripState == 1)
        {
          if (blnSimulationMode == 0)
          {
            rtn = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter1 -1), 0);
            if (rtn != 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error opening HHS = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
          }
          else
          {
            Trace(">> [SIM] Hamilton HHS ", arrHHSDevices[loopCounter1-1], ": Open;");
          }
        }
        else
        {
          if (blnSimulationMode == 0)
          {
            rtn = HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter1 -1), 1);
            if (rtn != 0)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("## Error closing HHS = "), arrTiltModules.ElementAt( loopCounter1 -1));
            }
          }
          else
          {
            Trace(">> [SIM] Hamilton HHS ", arrHHSDevices[loopCounter1-1], ": Close;");
          }
        }
      }
    }
  }
} // library namespace
