#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLSeqLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLML_STARLib.hsl"
#include "Hamilton Tilt Clamp Module\\Hamilton Tilt Clamp Module.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace ACC_PROCESSES {
  variable arrHHSDevices[];
  sequence seqCOREGripper;
  sequence seqTips_5mL;
  function Abstract(  ) void ;
  function HHS_Heat( variable intTemp ) void ;
  function HHS_Shake( variable intSpeed ) void ;
  function PIP_5mL_ResToHHS( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable intVolume, variable intLiquidType ) void ;
  function PIP_5mL_ResToTilt( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable intVolume, variable intLiquidType ) void ;
  function PIP_5mL_TiltToFalcon( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable intVolume, variable intLiquidType ) void ;
  function PIP_5mL_TiltToWaste( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable intVolume, variable intLiquidType ) void ;
  function System_Init( device & ML_STAR, sequence seqCORE, sequence seq_5mLTipSequence, variable & blnSimulationMode ) void ;
  function TILT_Angle( variable intTiltAngle ) void ;
  function TILT_Sway(  ) void ;
  function TMR_Start( variable blnSimulationMode, timer & strTimer, variable intTime ) void ;
  function TMR_WaitFor( timer & strTimer ) void ;
  function TRP_OneWell_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Abstract(  ) void {
  }

  function HHS_Heat( variable intTemp ) void {
    private variable loopCounter1;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("HHS_Heat"));
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intTemp != 0)
        {
          HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1), intTemp, 0);
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started heating HHS_"), loopCounter1, Translate(" to "), intTemp, Translate("C"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Stopped heating HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
  }

  function HHS_Shake( variable intSpeed ) void {
    private variable loopCounter1;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("HHS_Shake"));
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intSpeed != 0)
        {
          HSLHamHeaterShaker::StartShaker(arrHHSDevices.ElementAt( loopCounter1 -1), intSpeed);
          TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Started shaking HHS_"), loopCounter1, Translate(" at "), intSpeed, Translate("rpm"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("-- Stopped shaking HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
  }

  function TILT_Angle( variable intTiltAngle ) void {
  }

  function TRP_OneWell_CORE( sequence seqSource, sequence seqDestination, device & ML_STAR ) void {
    private variable intGripWidth;
    private variable intGripWidthOpen;
    private variable intGripHeight;
    private variable loopCounter1;
    private variable intNumberOfTransports;
    private variable intEjectTool;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("TRP_OneWell_CORE"));
    intEjectTool = 0;
    intGripWidth = 83;
    intGripHeight = 5.9;
    intGripWidthOpen = 87;
    intNumberOfTransports = SeqGetTotal(seqSource);
    {
      loopCounter1 = 0;
      while (
         (seqSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqSource, 1);
        loopCounter1 = loopCounter1 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Transport loop: "), loopCounter1, Translate("/"), intNumberOfTransports);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        if (loopCounter1 == intNumberOfTransports)
        {
          intEjectTool = 1;
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (
           (seqSource.GetCurrentPosition() > 0 && seqSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqSource.SetMax(seqSource.GetTotal());
      seqSource.SetCurrentPosition(1);
    }
  }

  function System_Init( device & ML_STAR, sequence seqCORE, sequence seq_5mLTipSequence, variable & blnSimulationMode ) void {
    private variable strHHSDevice;
    private variable loopCounter1;
    private variable arrTiltModules[];
    blnSimulationMode = 0;
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    TRACELEVEL::SetActionIndicator(TRACELEVEL::ACTION::START, Translate("="));
    arrHHSDevices.SetSize(0);
    HSLHamHeaterShaker::SetSimulation(blnSimulationMode);
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        strHHSDevice = StrConcat2(Translate("devHHS_"), loopCounter1);
        HSLHamHeaterShaker::CreateUsbDevice(1, strHHSDevice);
        HSLHamHeaterShaker::StopAllShaker();
        arrHHSDevices.AddAsLast(strHHSDevice);
      }
    }
    arrTiltModules.SetSize(0);
    SeqRemoveAll(seqCOREGripper);
    SeqCopySequence(seqCOREGripper, seqCORE);
    SeqRemoveAll(seqTips_5mL);
    SeqCopySequence(seqTips_5mL, seq_5mLTipSequence);
  }

  function TMR_Start( variable blnSimulationMode, timer & strTimer, variable intTime ) void {
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("TMR_Start"));
    if (blnSimulationMode == 1)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Instrument in simulation. Shortening timer."), Translate(""));
      intTime = 3;
    }
    if( 0 == strTimer.SetTimer(intTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started new timer for: "), intTime, Translate(" seconds"), Translate(""));
  }

  function TMR_WaitFor( timer & strTimer ) void {
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("TMR_WaitFor"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for timer to complete..."), Translate(""));
    if( 0 == strTimer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Timer complete."), Translate(""));
  }

  function TILT_Sway(  ) void {
    private variable loopCounter1;
    private variable intTemp;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("TILT_Sway"));
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (intTemp != 0)
        {
          HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1), intTemp, 0);
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started heating HHS_"), loopCounter1, Translate(" to "), intTemp, Translate("C"), Translate(""));
        }
        else
        {
          HSLHamHeaterShaker::StopTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1));
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Stopped heating HHS_"), loopCounter1, Translate(""), Translate(""), Translate(""), Translate(""));
        }
      }
    }
  }

  function PIP_5mL_TiltToFalcon( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable intVolume, variable intLiquidType ) void {
    private variable intLoopNumber;
    private variable intTransferVolume;
    private variable fltLoopNumber;
    private variable intDispenseHeight;
    private variable intAspirateRetract;
    private variable strChannelPattern;
    private variable loopCounter1;
    private variable intDispenseRetract;
    private variable loopCounter2;
    private variable fltTransferVolume;
    private variable loopCounter3;
    private variable intNumberOfChannels;
    private variable intAspirateHeight;
    private variable strLiquidClass;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("PIP_5mL_TiltToFalcon_Cells"));
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    fltLoopNumber = intVolume / (4000 * 1.0);
    intLoopNumber = MthCeiling(fltLoopNumber);
    fltTransferVolume = intVolume / (intLoopNumber * 1.0);
    intTransferVolume = MthCeiling(fltTransferVolume);
    strChannelPattern = Translate("");
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
      {
        loopCounter3 = loopCounter3 + 1;
        strChannelPattern = strChannelPattern + Translate("1");
      }
    }
    strChannelPattern = strChannelPattern + Translate("0000000");
    if (intLiquidType == 0)
    {
      strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
    }
    else
    {
      if (intLiquidType == 1)
      {
        strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
      }
      else
      {
        if (intLiquidType == 2)
        {
          strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Error: invalid liquid type selected"), Translate(">>>>> Method aborted."));
          abort;
        }
      }
    }
    intAspirateRetract = 18;
    intAspirateHeight = 0.2;
    intDispenseRetract = 18;
    intDispenseHeight = 32;
    TILT_Angle(10);
    {
      loopCounter2 = 0;
      while (
         (seqSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqSource, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
        {
          for(loopCounter1 = 0; loopCounter1 < intLoopNumber;)
          {
            loopCounter1 = loopCounter1 + 1;
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Pipetting Loop: "), loopCounter1, Translate("/"), Translate("intLoopNumber"));
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
          }
        }
        SeqIncrement(seqSource, intNumberOfChannels);
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        if (
           (seqSource.GetCurrentPosition() > 0 && seqSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqSource.SetMax(seqSource.GetTotal());
      seqSource.SetCurrentPosition(1);
    }
    SeqResetSequenceIndexes(seqSource);
  }

  function PIP_5mL_TiltToWaste( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable intVolume, variable intLiquidType ) void {
    private variable intLoopNumber;
    private variable intTransferVolume;
    private variable fltLoopNumber;
    private variable intDispenseHeight;
    private variable intAspirateRetract;
    private variable strChannelPattern;
    private variable loopCounter1;
    private variable intDispenseRetract;
    private variable loopCounter2;
    private variable fltTransferVolume;
    private variable loopCounter3;
    private variable intNumberOfChannels;
    private variable intAspirateHeight;
    private variable strLiquidClass;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("PIP_5mL_TiltToWaste"));
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    fltLoopNumber = intVolume / (4000 * 1.0);
    intLoopNumber = MthCeiling(fltLoopNumber);
    fltTransferVolume = intVolume / (intLoopNumber * 1.0);
    intTransferVolume = MthCeiling(fltTransferVolume);
    strChannelPattern = Translate("");
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
      {
        loopCounter3 = loopCounter3 + 1;
        strChannelPattern = strChannelPattern + Translate("1");
      }
    }
    strChannelPattern = strChannelPattern + Translate("0000000");
    if (intLiquidType == 0)
    {
      strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
    }
    else
    {
      if (intLiquidType == 1)
      {
        strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Error: invalid liquid type selected"), Translate(">>>>> Method aborted."));
        abort;
      }
    }
    intAspirateRetract = 18;
    intAspirateHeight = 0.2;
    intDispenseRetract = 18;
    intDispenseHeight = 32;
    TILT_Angle(10);
    {
      loopCounter2 = 0;
      while (
         (seqSource.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqDestination, 1, seqSource, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
        {
          for(loopCounter1 = 0; loopCounter1 < intLoopNumber;)
          {
            loopCounter1 = loopCounter1 + 1;
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Pipetting Loop: "), loopCounter1, Translate("/"), intLoopNumber);
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
          }
        }
        SeqIncrement(seqSource, intNumberOfChannels);
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        if (
           (seqSource.GetCurrentPosition() > 0 && seqSource.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqDestination.SetMax(seqDestination.GetTotal());
      seqSource.SetMax(seqSource.GetTotal());
      seqDestination.SetCurrentPosition(1);
      seqSource.SetCurrentPosition(1);
    }
    SeqResetSequenceIndexes(seqSource);
  }

  function PIP_5mL_ResToTilt( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable intVolume, variable intLiquidType ) void {
    private variable intLoopNumber;
    private variable intTransferVolume;
    private variable fltLoopNumber;
    private variable intDispenseHeight;
    private variable intAspirateRetract;
    private variable strChannelPattern;
    private variable loopCounter1;
    private variable intDispenseRetract;
    private variable loopCounter2;
    private variable fltTransferVolume;
    private variable loopCounter3;
    private variable intNumberOfChannels;
    private variable intAspirateHeight;
    private variable strLiquidClass;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("PIP_5mL_ResToTilt"));
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    fltLoopNumber = intVolume / (4000 * 1.0);
    intLoopNumber = MthCeiling(fltLoopNumber);
    fltTransferVolume = intVolume / (intLoopNumber * 1.0);
    intTransferVolume = MthCeiling(fltTransferVolume);
    strChannelPattern = Translate("");
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
      {
        loopCounter3 = loopCounter3 + 1;
        strChannelPattern = strChannelPattern + Translate("1");
      }
    }
    strChannelPattern = strChannelPattern + Translate("0000000");
    if (intLiquidType == 0)
    {
      strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
    }
    else
    {
      if (intLiquidType == 1)
      {
        strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
      }
      else
      {
        if (intLiquidType == 2)
        {
          strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Error: invalid liquid type selected"), Translate(">>>>> Method aborted."));
          abort;
        }
      }
    }
    intAspirateRetract = 18;
    intAspirateHeight = 0.2;
    intDispenseRetract = 18;
    intDispenseHeight = 32;
    TILT_Angle(10);
    {
      loopCounter2 = 0;
      while (
         (seqDestination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqDestination, 1, seqSource, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
        {
          for(loopCounter1 = 0; loopCounter1 < intLoopNumber;)
          {
            loopCounter1 = loopCounter1 + 1;
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Pipetting Loop: "), loopCounter1, Translate("/"), intLoopNumber);
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
          }
        }
        SeqIncrement(seqDestination, intNumberOfChannels);
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        if (
           (seqDestination.GetCurrentPosition() > 0 && seqDestination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqDestination.SetMax(seqDestination.GetTotal());
      seqSource.SetMax(seqSource.GetTotal());
      seqDestination.SetCurrentPosition(1);
      seqSource.SetCurrentPosition(1);
    }
    SeqResetSequenceIndexes(seqDestination);
  }

  function PIP_5mL_ResToHHS( device & ML_STAR, sequence & seqSource, sequence & seqDestination, variable intVolume, variable intLiquidType ) void {
    private variable intLoopNumber;
    private variable intTransferVolume;
    private variable fltLoopNumber;
    private variable intDispenseHeight;
    private variable intAspirateRetract;
    private variable strChannelPattern;
    private variable loopCounter1;
    private variable intDispenseRetract;
    private variable loopCounter2;
    private variable fltTransferVolume;
    private variable loopCounter3;
    private variable intNumberOfChannels;
    private variable intAspirateHeight;
    private variable strLiquidClass;
    private variable intChannelPerTransfer;
    private variable intPipettingLoop;
    private variable fltPipettingLoop;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::START, Translate("ACC_Processes"), Translate("strMethodName"), Translate("PIP_5mL_ResToHHS"));
    intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 43);
    intChannelPerTransfer = 2;
    fltLoopNumber = intVolume / (8000 * 1.0);
    intLoopNumber = MthCeiling(fltLoopNumber);
    fltTransferVolume = intVolume / (intLoopNumber * 1.0);
    fltTransferVolume = fltTransferVolume / (intChannelPerTransfer * 1.0);
    intTransferVolume = MthCeiling(fltTransferVolume);
    strChannelPattern = Translate("");
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
      {
        loopCounter3 = loopCounter3 + 1;
        strChannelPattern = strChannelPattern + Translate("1");
      }
    }
    strChannelPattern = strChannelPattern + Translate("0000000");
    if (intLiquidType == 0)
    {
      strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
    }
    else
    {
      if (intLiquidType == 1)
      {
        strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
      }
      else
      {
        if (intLiquidType == 2)
        {
          strLiquidClass = Translate("4mlTF_Water_DispenseJet_Empty_ReagentWaste");
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>>>> Error: invalid liquid type selected"), Translate(">>>>> Method aborted."));
          abort;
        }
      }
    }
    intAspirateRetract = 18;
    intAspirateHeight = 0.2;
    intDispenseRetract = 18;
    intDispenseHeight = 32;
    fltPipettingLoop = SeqGetTotal(seqDestination);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Number of sequence positions in seqDest: "), fltPipettingLoop);
    fltPipettingLoop = fltPipettingLoop / (intChannelPerTransfer * 1.0);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Number of sequence positions in seqDest: "), fltPipettingLoop);
    intPipettingLoop = MthCeiling(fltPipettingLoop);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Number of pipetting loops: "), intPipettingLoop);
    {
      for(loopCounter2 = 0; loopCounter2 < intPipettingLoop;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
        {
          for(loopCounter1 = 0; loopCounter1 < intLoopNumber;)
          {
            loopCounter1 = loopCounter1 + 1;
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Pipetting Loop: "), loopCounter1, Translate("/"), intLoopNumber);
            ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
            ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
          }
        }
        SeqIncrement(seqDestination, intNumberOfChannels);
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
      }
    }
    SeqResetSequenceIndexes(seqDestination);
  }
} // library namespace
