#pragma once
#include "ACC_Processes.hs_"
#include "HSLML_STARLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace ACC_FUNCTIONS {
  function Abstract(  ) void ;
  function PIP_Tilt_PBSWash( device & ML_STAR, sequence seqPBSRes, sequence seqFlaskAsp, sequence seqFlaskDisp, sequence seqWaste, variable intVolume ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ACC_PROCESSES::_InitLibrary();
  }
  function _ExitLibrary() {
    ACC_PROCESSES::_ExitLibrary();
  }

  function Abstract(  ) void {
  }

  function PIP_Tilt_PBSWash( device & ML_STAR, sequence seqPBSRes, sequence seqFlaskAsp, sequence seqFlaskDisp, sequence seqWaste, variable intVolume ) void {
    private variable intLiquidType;
    private variable blnSimulationMode;
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    intLiquidType = 1;
    ACC_PROCESSES::PIP_5mL_ResToTilt(ML_STAR, seqPBSRes, seqFlaskDisp, intVolume, intLiquidType);
    ACC_PROCESSES::TILT_Sway(blnSimulationMode, 10, 10, 15);
    ACC_PROCESSES::PIP_5mL_TiltToWaste(ML_STAR, seqFlaskAsp, seqWaste, intVolume, intLiquidType);
  }
} // library namespace
