 namespace _Method { #include "Automated-Cell-Culture-2026\\Library\\ACC_Processes.hs_" }
 namespace _Method { #include "Automated-Cell-Culture-2026\\Library\\ACC_Functions.hs_" }
#include "Automated-Cell-Culture-2026\\Deck Layouts\\STARplus_Layout_OneWell.res"
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
variable blnSimulationMode;
global device ML_STAR ("Automated-Cell-Culture-2026\\Deck Layouts\\STARplus_Layout_OneWell.lay", "ML_STAR", hslTrue);
variable int_SeedingVol;
variable int_MediaSeedingVol;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ACC_PROCESSES::_InitLibrary();
    ACC_FUNCTIONS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("******************************************************************************************************************************************************\n                                                            Method Details\n******************************************************************************************************************************************************\nMethod:          Cell Culturing for the MAVE_SGE project\nVersion:         0.1\nDescription:     Check SOPs \nSoftware:        Venus 4 (v 4.5.0.7977)\nAuthor:          Chris Henderson, Tobi Ajenifuja\n------------------------------------------------------------------------------------------------------------------------------------------------------"));
    int_SeedingVol = 1000;
    int_MediaSeedingVol = 15000 - int_SeedingVol;
    blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    ACC_PROCESSES::SYSTEM_Init(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips_4mLFiltered, ML_STAR.res_PBS_XL, ML_STAR.res_Media_XL, ML_STAR.res_TrypLE_XL, ML_STAR.res_Waste_XL, ML_STAR.Falcon, blnSimulationMode);
    ACC_PROCESSES::HHS_Heat(38);
    ACC_PROCESSES::TRP_OneWell_CORE(ML_STAR.Trp_OneWell_Loading, ML_STAR.Trp_OneWell_Tilt, ML_STAR);
    ACC_PROCESSES::PIP_5mL_TiltToWaste(ML_STAR, ML_STAR.Pip_OneWell_Tilt_Asp, 15000, 0);
    ACC_FUNCTIONS::PIP_Tilt_PBSWash(ML_STAR, ML_STAR.Pip_OneWell_Tilt_Asp, ML_STAR.Pip_OneWell_Tilt_Disp, 5000);
    ACC_PROCESSES::PIP_5mL_ResToFlask(ML_STAR, ML_STAR.Pip_OneWell_Tilt_Disp, 5000, 2);
    ACC_PROCESSES::TRP_OneWell_CORE(ML_STAR.Trp_OneWell_Tilt, ML_STAR.Trp_OneWell_HHS, ML_STAR);
    ACC_FUNCTIONS::HHS_ShakingIncubation(250, blnSimulationMode, 450);
    ACC_PROCESSES::PIP_5mL_ResToFlask(ML_STAR, ML_STAR.Pip_OneWell_HHS, 5000, 0);
    ACC_FUNCTIONS::HHS_ShakingIncubation(450, blnSimulationMode, 250);
    ACC_PROCESSES::TRP_OneWell_CORE(ML_STAR.Trp_OneWell_HHS, ML_STAR.Trp_OneWell_Tilt, ML_STAR);
    ACC_PROCESSES::TILT_Sway(7, 5, 25);
    ACC_PROCESSES::PIP_5mL_TiltToFalcon(ML_STAR, ML_STAR.Pip_OneWell_Tilt_Asp, ML_STAR.Falcon, 10000, 0);
    ACC_PROCESSES::TRP_OneWell_CORE(ML_STAR.Trp_OneWell_LoadingEmpty, ML_STAR.Pip_OneWell_HHS, ML_STAR);
    ACC_PROCESSES::PIP_5mL_FalconToFlask(ML_STAR, ML_STAR.Pip_OneWell_HHS, int_SeedingVol, 0);
    ACC_PROCESSES::PIP_5mL_ResToFlask(ML_STAR, ML_STAR.Pip_OneWell_HHS, int_MediaSeedingVol, 0);
    ACC_FUNCTIONS::HHS_ShakingIncubation(450, blnSimulationMode, 30);
    if(0){
      MECC::TraceComment(Translate("######################################\n\n                            METHOD ABORTED\n\n######################################"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">>> Intentional method abort"), Translate(""));
      abort;
    }
    ACC_PROCESSES::TRP_OneWell_CORE(ML_STAR.Trp_OneWell_Tilt, ML_STAR.Trp_OneWell_Loading, ML_STAR);
    ACC_PROCESSES::TRP_OneWell_CORE(ML_STAR.Trp_OneWell_HHS, ML_STAR.Trp_OneWell_LoadingEmpty, ML_STAR);
    ACC_PROCESSES::SYSTEM_Close(ML_STAR);
    ACC_PROCESSES::_ExitLibrary();
    ACC_FUNCTIONS::_ExitLibrary();
  } }
